<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p1="clr-namespace:Bonsai.Mixer;assembly=Bonsai.Mixer"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:CreateAudioContext">
          <al:SampleRate>0</al:SampleRate>
          <al:Refresh>0</al:Refresh>
          <al:Position>
            <al:X>0</al:X>
            <al:Y>0</al:Y>
            <al:Z>0</al:Z>
          </al:Position>
          <al:Velocity>
            <al:X>0</al:X>
            <al:Y>0</al:Y>
            <al:Z>0</al:Z>
          </al:Velocity>
          <al:Direction>
            <al:X>-0</al:X>
            <al:Y>-0</al:Y>
            <al:Z>-1</al:Z>
          </al:Direction>
          <al:Up>
            <al:X>0</al:X>
            <al:Y>1</al:Y>
            <al:Z>0</al:Z>
          </al:Up>
          <al:Gain>1</al:Gain>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioResources">
          <al:Buffers />
          <al:Sources />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>AM_1026_F004\base_case_phase\Day 7\4F_D7_video2026-10-11T16_42_29.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Image1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>25</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>924</cv:X>
                <cv:Y>181</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1047</cv:X>
                <cv:Y>181</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1047</cv:X>
                <cv:Y>926</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>924</cv:X>
                <cv:Y>926</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>255</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CroppedFrames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>20</cv:ThresholdValue>
          <cv:MaxValue>225</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>20</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\centroid.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\behaviourvideoframes.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>Test\blip_test.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\homeport_urewarded.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Behavior1 Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SampleRate</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="SampleRate" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 25000 ? 0 : it
</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>not in roi</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &lt; 7300 || it &gt; 12000
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>2161.37524</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>in roi</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt;= 7300 &amp;&amp; it &lt;= 12000
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>480</dsp:BufferLength>
          <dsp:Frequency>2161.375244140625</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>96000</dsp:SampleRate>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Amplitude>1</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Source</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:AppendBuffer" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 25000 ? 0 : it
</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>not in roi</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &lt; 7300 || it &gt; 12000
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>2161.37524</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>in roi</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it &gt;= 7300 &amp;&amp; it &lt;= 12000
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>480</dsp:BufferLength>
          <dsp:Frequency>2161.375244140625</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>96000</dsp:SampleRate>
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Amplitude>3200</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>Test\bliptest_audio.wav</al:FileName>
          <al:Suffix>Timestamp</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>false</al:Overwrite>
          <al:SampleRate>96000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Test\blip_freq_test.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>double.IsNaN(it.Value) ? it.Accumulation : it.Value
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CroppedFrames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size.Height</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item1/Item2</scr:Expression>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>animal_pos_freq</scr:Name>
        <scr:Expression>Math.Pow(11,it)*2000</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateMixerContext">
          <p1:HostApi />
          <p1:DeviceName />
          <p1:SampleRate>96000</p1:SampleRate>
          <p1:ChannelCount xsi:nil="true" />
          <p1:SuggestedLatency xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:StartMixer" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Mixer</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateSource">
          <p1:Looping>true</p1:Looping>
          <p1:Playing>true</p1:Playing>
          <p1:Gain>1</p1:Gain>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Source</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="17" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="40" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="31" To="36" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="32" To="34" Label="Source1" />
      <Edge From="33" To="35" Label="Source1" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="38" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="42" Label="Source1" />
      <Edge From="41" To="42" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="43" To="48" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="44" To="46" Label="Source1" />
      <Edge From="45" To="47" Label="Source1" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="47" To="50" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source2" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="50" To="54" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="57" To="58" Label="Source1" />
      <Edge From="58" To="61" Label="Source1" />
      <Edge From="59" To="60" Label="Source1" />
      <Edge From="60" To="61" Label="Source2" />
      <Edge From="61" To="62" Label="Source1" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="65" To="66" Label="Source1" />
      <Edge From="66" To="67" Label="Source1" />
      <Edge From="68" To="69" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>