<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>Linear Track Pilot\Test\test_linear_animal2026-08-17T12_25_57 (1).avi</cv:FileName>
          <cv:PlaybackRate>9</cv:PlaybackRate>
          <cv:StartPosition>730</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Image1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>25</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>930</cv:X>
                <cv:Y>188</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1050</cv:X>
                <cv:Y>188</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1050</cv:X>
                <cv:Y>926</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>930</cv:X>
                <cv:Y>926</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>255</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CroppedFrames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>30</cv:ThresholdValue>
          <cv:MaxValue>150</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>20</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Linear Track Pilot\Test\centroid.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Linear Track Pilot\Test\behaviourvideoframes.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>Linear Track Pilot\Test\test_animal</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>normalized y</Name>
        <Text><![CDATA[calculates the normalized y coordinate of the animal. is between 0 and 1.]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>double.IsNaN(it.Value) ? it.Accumulation : it.Value
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CroppedFrames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size.Height</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item1/Item2</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateDiscreteUniform">
          <p1:Lower>11</p1:Lower>
          <p1:Upper>11</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Sample" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Sample_trial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>sweep function</Name>
        <Text><![CDATA[formula that determines how fast or slow the tone ramps]]></Text>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>animal_pos_freq</scr:Name>
        <scr:Expression>Math.Pow(Item2,Item1)*2000</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 25000 ? 0 : it
</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Annotation">
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>10</dsp:BufferLength>
          <dsp:Frequency>19872.243332389848</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>192000</dsp:SampleRate>
          <dsp:Amplitude>100</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>cutoffbadsound</Name>
        <Text><![CDATA[condition scan nan]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:SampleRate>192000</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>AudioPlayback</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>change to valve</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:DigitalInputState" />
      </Expression>
      <Expression xsi:type="BitwiseAnd">
        <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
          <Value>DIPort1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToInt32(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rewardgive</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Xor_cast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item1 &amp;&amp; Item2
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>SupplyPort1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Behavior1 Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &lt;14000 ? true : (it &gt; 22000 ? false : true)
</scr:Expression>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1,Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Linear Track Pilot\Test\goalzone_y.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond,Value.Item1,Value.Item2</io:Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>goalzoneandovershoot_true</scr:Name>
        <scr:Expression>it &gt;= 14000
</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Name>holdTgoal</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Accumulation ? true : it.Value
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>overshoot_true</scr:Name>
        <scr:Expression>it &gt; 22000 ? true : false</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Name>holdTovershoot</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Accumulation ? true : it.Value
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Xor" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Xor_cast</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>resetXOR</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Xor_cast</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Item1 &amp;&amp; !Item2
</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Behavior2 Commands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="beh:Parse">
          <harp:Register xsi:type="beh:DigitalInputState" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="BitwiseAnd">
          <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
            <Value>DIPort0</Value>
          </Operand>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="scr:ExpressionTransform">
          <scr:Expression>Convert.ToInt32(it)</scr:Expression>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:DistinctUntilChanged" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Repeat" />
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>AudioPlayback</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>Linear Track Pilot\Test\mouse_audi_test.wav</al:FileName>
          <al:Suffix>None</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>true</al:Overwrite>
          <al:SampleRate>192000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Sample_trial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Linear Track Pilot\Test\sample_trial.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>Linear Track Pilot\Test\homeport_unrewardedpoke.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Behavior1 Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
          <rx:Name>Behavior2 Commands</rx:Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="beh:Device">
            <harp:OperationMode>Active</harp:OperationMode>
            <harp:OperationLed>On</harp:OperationLed>
            <harp:DumpRegisters>false</harp:DumpRegisters>
            <harp:VisualIndicators>On</harp:VisualIndicators>
            <harp:Heartbeat>Disabled</harp:Heartbeat>
            <harp:IgnoreErrors>false</harp:IgnoreErrors>
            <harp:PortName>COM4</harp:PortName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>Behavior2 Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Behavior2 Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="beh:Parse">
          <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>Linear Track Pilot\Test\farport_unrewardpokes.csv</io:FileName>
          <io:ListSeparator>,</io:ListSeparator>
          <io:Append>true</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>true</io:IncludeHeader>
          <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="14" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="13" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="14" To="17" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="18" To="25" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="30" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="32" Label="Source1" />
      <Edge From="31" To="32" Label="Source2" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="48" Label="Source1" />
      <Edge From="41" To="48" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="46" To="65" Label="Source1" />
      <Edge From="47" To="48" Label="Source3" />
      <Edge From="47" To="66" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="50" To="51" Label="Source1" />
      <Edge From="50" To="58" Label="Source1" />
      <Edge From="50" To="60" Label="Source1" />
      <Edge From="51" To="54" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
      <Edge From="53" To="54" Label="Source2" />
      <Edge From="54" To="55" Label="Source1" />
      <Edge From="55" To="56" Label="Source1" />
      <Edge From="56" To="57" Label="Source1" />
      <Edge From="58" To="59" Label="Source1" />
      <Edge From="59" To="62" Label="Source1" />
      <Edge From="60" To="61" Label="Source1" />
      <Edge From="61" To="62" Label="Source2" />
      <Edge From="62" To="63" Label="Source1" />
      <Edge From="63" To="64" Label="Source1" />
      <Edge From="64" To="67" Label="Source1" />
      <Edge From="65" To="66" Label="Source2" />
      <Edge From="66" To="67" Label="Source2" />
      <Edge From="67" To="68" Label="Source1" />
      <Edge From="69" To="70" Label="Source1" />
      <Edge From="70" To="71" Label="Source1" />
      <Edge From="71" To="72" Label="Source1" />
      <Edge From="72" To="73" Label="Source1" />
      <Edge From="73" To="74" Label="Source1" />
      <Edge From="75" To="76" Label="Source1" />
      <Edge From="77" To="78" Label="Source1" />
      <Edge From="78" To="79" Label="Source1" />
      <Edge From="80" To="81" Label="Source1" />
      <Edge From="81" To="82" Label="Source1" />
      <Edge From="82" To="83" Label="Source1" />
      <Edge From="84" To="85" Label="Source1" />
      <Edge From="85" To="86" Label="Source1" />
      <Edge From="87" To="88" Label="Source1" />
      <Edge From="88" To="89" Label="Source1" />
      <Edge From="90" To="91" Label="Source1" />
      <Edge From="91" To="92" Label="Source1" />
      <Edge From="92" To="93" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>