<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="vid:VideoCaptureDevice">
            <vid:Index>0</vid:Index>
            <vid:CaptureProperties />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>base_case_test\bascasevideotest2026-10-01T13_49_55.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>150</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Image1</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Smooth">
          <cv:SmoothType>Gaussian</cv:SmoothType>
          <cv:Size1>25</cv:Size1>
          <cv:Size2>0</cv:Size2>
          <cv:Sigma1>0</cv:Sigma1>
          <cv:Sigma2>0</cv:Sigma2>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>957</cv:X>
                <cv:Y>180</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1026</cv:X>
                <cv:Y>180</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1026</cv:X>
                <cv:Y>925</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>957</cv:X>
                <cv:Y>925</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>255</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CroppedFrames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>50</cv:ThresholdValue>
          <cv:MaxValue>225</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxSimple</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>20</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>base_case_test\centroid.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>base_case_test\behaviourvideoframes.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:VideoWriter">
            <cv:FileName>base_case_test\bascasevideotest.avi</cv:FileName>
            <cv:Suffix>Timestamp</cv:Suffix>
            <cv:Buffered>true</cv:Buffered>
            <cv:Overwrite>false</cv:Overwrite>
            <cv:FourCC>FMP4</cv:FourCC>
            <cv:FrameRate>30</cv:FrameRate>
            <cv:FrameSize>
              <cv:Width>0</cv:Width>
              <cv:Height>0</cv:Height>
            </cv:FrameSize>
            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it &gt; 25000 ? 0 : it
</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>base_case_test\frequencies.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Frequency" Selector="it" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>5</dsp:BufferLength>
          <dsp:Frequency>20177.661444133693</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>96000</dsp:SampleRate>
          <dsp:Amplitude>200</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:DeviceName>Generic Software on Speakers (Realtek(R) Audio)</al:DeviceName>
          <al:SampleRate>96000</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioWriter">
          <al:FileName>base_case_test\basecasetestaduio.wav</al:FileName>
          <al:Suffix>Timestamp</al:Suffix>
          <al:Buffered>true</al:Buffered>
          <al:Overwrite>false</al:Overwrite>
          <al:SampleRate>96000</al:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>normalized y</Name>
        <Text><![CDATA[calculates the normalized y coordinate of the animal. is between 0 and 1.]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Centroid Broadcast</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="rx:Scan">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>double.IsNaN(it.Value) ? it.Accumulation : it.Value
</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CroppedFrames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size.Height</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Single(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Item1/Item2</scr:Expression>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>sweep function</Name>
        <Text><![CDATA[formula that determines how fast or slow the tone ramps]]></Text>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>animal_pos_freq</scr:Name>
        <scr:Expression>Math.Pow(11,it)*2000</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>animal_pos_freq</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:TimestampedDigitalInputState" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>base_case_test\homeport_urewarded.csv</io:FileName>
        <io:ListSeparator>,</io:ListSeparator>
        <io:Append>true</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
        <io:Selector>Value.Value,Timestamp.Hour,Timestamp.Minute,Timestamp.Second,Timestamp.Millisecond</io:Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Behavior1 Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>false</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM3</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Behavior1 Events</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="0" To="15" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="1" To="15" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="27" To="35" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="34" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="35" Label="Source2" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>